PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1820, 1000]
  color = -1.0000, -1.0000, -1.0000
  expName = EEG_Statistc
  keyboardBackend = ioHub
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Routines
  Routine introrest
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 接下来是静息态扫描阶段，请你注视界面的+部分
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    TextComponent text_5
      letterHeight = 0.06
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 按任意键以继续
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet
        import random
        import time

        # 创建一个名为“MyStream”的新LSL流输出，一个通道
        info = StreamInfo('EEGStream', 'Markers', 1, 0, 'string', 'marker')


        #info = StreamInfo('MyMarkerStream', 'Markers', 1, 0, 'string', 'myuidw43536')

        # next make an outlet
        outlet = StreamOutlet(info)

        print("now sending markers...")
      End Routine:
        outlet.push_sample(["20"])
        print(20)
  Routine rest
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = +
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(["20"])
        print(20)
  Routine outro
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        你已完成静息态部分

        接下来等待主试按"s"键进入记忆阶段
    KeyboardComponent key_resp_6
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine introrest
  Routine rest
  Routine outro
