PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'age': '0', 'gender': 'please input M/F', 'version': 'ESY'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1820, 980]
  color = -1.0000, -1.0000, -1.0000
  expName = VR_Memory_Test_Block
  keyboardBackend = ioHub
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Routines
  Routine intro
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = TestM2.PNG
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.2
      pos = (0.65, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $(trials_2.thisN+1)
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  Routine intro2
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = TestM3.PNG
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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  Routine fix
    PolygonComponent iti
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine thk
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent thankstext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        您现在已经完成了上机部分的实验。

        请按任意键结束本部分的实验。

        请您休息一会儿，谢谢您的参与~！
  Routine trialp
    ImageComponent image_3
      image = arrang.png
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent drag
      Code Type = Auto->JS
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      Begin Experiment:
        ## code for py->js
        #shuffle = util.shuffle
        #win = psychoJS.window
        #thisExp = psychoJS.experiment
      Begin Routine:
        # define scene terms
        thisExp.addData("stage","Arrangement")


        #label


        if pictype == "CaseType":
            outlet.push_sample(["201"])
            print(201)
        else:
            outlet.push_sample(["202"])
            print(202)



        def shuffle_twolist(list1, list2):
            b =  [i for i in range(len(list1))]
            np.random.shuffle(b)
            sorted_list1 = [t[1] for t in sorted(zip(b, list1), key=lambda x: x[0]) ]
            sorted_list2 = [t[1] for t in sorted(zip(b, list2), key=lambda x: x[0]) ]
            return sorted_list1, sorted_list2

        scenes = [label1, label2, label3, label4, label5, label6,label7, label8,label9,label10,label11,label12,label13,label14,startpoint, endpoint]
        scene_value = ['flower','bin','sofa','plant','mailbox','wash','CaseAvatar1', 'CaseAvatar2', 'CaseAvatar3', 'CaseAvatar4', 'CaseAvatar5', 'CaseAvatar6', 'CaseAvatar7', 'CaseAvatar8','startpoint','endpoint']

        new_scenes,new_scene_value = shuffle_twolist(scenes, scene_value)
        #new_scenes,new_scene_value = scenes, scene_value
        print(new_scenes)
        print(new_scene_value)

        #shuffle(scenes)
        thisExp.addData('scenes', new_scene_value)



        # set pos of different figures
        for pointer in range(len(new_scenes)):
            # 0 1 2 3 / 4 5 6 7
            # 0.45/0.15/-0.25/-0.45 0.15*(x % 4)-0.45
            x = -0.8+(pointer // 6)*0.1
            y = 0.15*(pointer % 6)-0.37
            new_scenes[pointer].setPos([x, y])
            if new_scene_value[pointer].startswith("CaseAvatar"):
                new_scenes[pointer].setSize([new_size, new_size])

        #    if new_scene_value[pointer] != "startpoint" and new_scene_value[pointer] != "endpoint":
        #        new_scenes[pointer].setSize([new_size, new_size])

            print(new_scene_value[pointer],'(',x,',',y,')' )

        drag_in_process = False
        clicked_stim = None





        thisExp.nextEntry()
        ## textstime list
        #stimuli = []
        #x_pos = [-0.7, -0.6, -0.5]
        #for i in range(len(scenes)):
        #    stimuli.append(visual.TextStim(win=win, name=str(i), text=scenes[i],
        #    font='Open Sans', pos=(x_pos[int(i / 4)], 0.3 - 0.1 * (i % 4)),
        #    height=0.03, color='red', colorSpace='rgb'))
        #    stimuli[i].setAutoDraw(True)
        #
        ## used in each frame

        #
        ##event.clearEvents()
      Each Frame:
        if not drag_in_process:
            for i in range(len(new_scenes)):
                if mouse.isPressedIn(new_scenes[i]):
                    # drag start
                    drag_in_process = True
                    clicked_stim = new_scenes[i]
                    thisExp.addData('scene', new_scene_value[i])
                    outlet.push_sample(["203"])
                    print(203)
                    # clear list
                    mouse.x = []
                    mouse.y = []
                    mouse.time = []
                    break
        if mouse.getPressed()[0] == 1:
            # set stimulus pos
            if drag_in_process:
                clicked_stim.pos = mouse.getPos()
        else:
            # drag end
            if drag_in_process:
                # record stimulus pos and time
                thisExp.addData('item.x', mouse.x)
                thisExp.addData('item.y', mouse.y)
                thisExp.addData('item.time', mouse.time)
                thisExp.nextEntry()
            drag_in_process = False
      End Routine:
        ## record end time
        #thisExp.addData('end_time', mouse.mouseClock.getTime())
        #thisExp.nextEntry()
        outlet.push_sample(["204"])
        print(204)
        screenshot = win.getMovieFrame()
        screenshot.save('data/'+expInfo['participant']+'_'+str(pictype)+'_arrangement.png')
        win.clearBuffer()
    ImageComponent scene
      image = p.png
      pos = (0.1, 0)
      size = (0.96, 1.2)
      startVal [time (s)] = 0.0
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    ImageComponent label1
      image = material2/1_flower.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label2
      image = material2/2_bin.PNG
      size = (0.08, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label3
      image = material2/3_sofa.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label4
      image = material2/4_plant.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label5
      image = material2/5_mail.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label6
      image = material2/6_wash.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label7
      image [set every repeat] = $t1
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label8
      image [set every repeat] = $t2
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label9
      image [set every repeat] = $t3
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label10
      image [set every repeat] = $t4
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.0353, 1.0000, 0.4588
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, -0.37)
      size = (0.2,0.07)
      startVal [time (s)] = 0
      text = Finish
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      callback:
        screenshot = win.getMovieFrame()

        screenshot.save('data/'+expInfo['participant']+'_'+expInfo['date']+'_arrangement.png')

        win.clearBuffer()
        continueRoutine = False
    ImageComponent label11
      image [set every repeat] = $t5
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label12
      image [set every repeat] = $t6
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label13
      image [set every repeat] = $t7
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label14
      image [set every repeat] = $t8
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent startpoint
      image = startpoint.png
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
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    ImageComponent endpoint
      image = endpoint.png
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine trialn
    ImageComponent bac
      image = bac.png
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image_4
      image [set every repeat] = $fig_location
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 's','k'
      correctAns = $corr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        values = ""
        valuex = ""
        valuey = ""
        valuez = ""
      Begin Routine:
        thisExp.addData("stage","Recall")

        if indicator == 'scene_things':
            valuex = "15"

        elif indicator == 'building':
            valuex = "16"

        elif indicator == 'Case':
            valuex = "17"
        else:
            valuex = "18"
        print(valuex)
        if corr == "s":
            valuey = "1"
        else:
            valuey = "2"

        outlet.push_sample([valuex+valuey])
      End Routine:
        if key_resp_4.corr:
            valuez = "3"
        else:
            valuez = "4"

        outlet.push_sample([valuex+valuez])
        print(valuex+valuez)
  Routine start
    CodeComponent startup_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        # The only way to win... is to play the game, actually
        cash_money = 0

        #order_num = int(random.random() * 50)
        #order = f"{order_num:03}"
        #order_file = f"orders/session{expInfo['session']}/order{order}.csv"
        #t_order_file = f"orders/session{expInfo['session']}/secorder{order}.csv"

        #wfile.xlsx

        if expInfo['version'] == 'ESY':
            w_file_whole = 'wfile_ESY.xlsx'
            arrange_file = 'Arrange_ESY.xlsx'
        else:
            w_file_whole = 'wfile.xlsx'
            arrange_file = 'Arrange.xlsx'
    CodeComponent lsl_init_2
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet
        import random
        import time


        from pylsl import StreamInfo, StreamOutlet

        # 创建一个名为“MyStream”的新LSL流输出，一个通道
        info = StreamInfo('EEGStream', 'Markers', 1, 0, 'string', 'marker')


        #info = StreamInfo('MyMarkerStream', 'Markers', 1, 0, 'string', 'myuidw43536')

        # next make an outlet
        outlet = StreamOutlet(info)

        print("now sending markers...")
  Routine med
  Routine rate
    SliderComponent slider
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.8, 0.08)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5,6,7)
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    CodeComponent code_2
      Code Type = Both
      Before JS Experiment:
        var px_pos;
      Begin JS Routine:
        is_pressed = false;
      Begin Routine:
        is_pressed = False
      Each Frame:
        vall = slider.markerPos
        if vall != None:

            vtxt.text = "当前您的评分： "+ str(round(vall,3))

        #    vtxt.text = "当前的奖金分配选择：\n您的奖金 : 对方的奖金 = " + str(yours) + " : " + str(oppos)
        #    您选择：\n{:,.2f}:{:,.2f} 分配方式\n您将得到：￥{:,.2f}\n对方将得到：￥{:,.2f}'.format(yours,oppos,yourm,oppsm)
        if not is_pressed and status_mouse.getPressed()[0]:
            is_pressed = True
            slider.fillColor = "blue"
            timer = core.CountdownTimer(0.3)

        # if slider has been clicked
        if is_pressed:
            if timer.getTime() <= 0:
                continueRoutine = False
        else:
            slider.fillColor = "red"
            slider.markerPos = slider._posToRating(slider.mouse.getPos())
            slider.recordRating(slider.markerPos)
      Each JS Frame:
        vall = slider.markerPos;
        if ((vall !== null)) {
            vtxt.text = ("\u5f53\u524d\u60a8\u7684\u8bc4\u5206\uff1a " + Math.round(vall, 3).toString());
        }
        if (((! is_pressed) && status_mouse.getPressed()[0])) {
            is_pressed = true;
            slider.fillColor = "blue";
            timer = new util.CountdownTimer(0.3);

        }
        if (is_pressed) {
            if ((timer.getTime() <= 0)) {
                continueRoutine = false;
            }
        } else {
            slider.fillColor = "red";

            px_pos = util.to_px(status_mouse.getPos(), "height", psychoJS.window);
            slider.markerPos = slider._posToRating(px_pos);

        //    slider.markerPos = slider._posToRating(slider.mouse.getPos());
            slider.recordRating(slider.markerPos);
        }
      End JS Routine:
        is_pressed = false;
        psychoJS.experiment.addData("stage", "rate");
      End Routine:
        is_pressed = False
        thisExp.addData("stage","rate")
        outlet.push_sample(["199"])
    MouseComponent status_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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    TextComponent vtxt
      color = -1.0000, 1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = yellow
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        评估一下你在VR眼镜场景物体记忆任务和判断物体是否在场景的任务中选择的表现，
        请你对自己对场景的记忆水平打分（最低1分，最高7分）
Flow
  Routine start
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $w_file_whole
    loopType = sequential
    nReps = 1
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    Routine intro
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $w_file
      loopType = sequential
      nReps = 1
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      Routine fix
      Routine trialn
    LoopTerminator trials
    Routine rate
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = $arrange_file
    loopType = random
    nReps = 1
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    Routine intro2
    Routine trialp
  LoopTerminator trials_3
  Routine thk
