PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'd2data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['materials/1_dis_cola.png', 'materials/1_flower.PNG', 'materials/2_bin.PNG', 'materials/2_dis_Traflight.png', 'materials/3_dis_sofa.PNG', 'materials/3_sofa.PNG', 'materials/4_dis_lemontree.PNG', 'materials/4_plant.PNG', 'materials/5_dis_chair.png', 'materials/5_mail.PNG', 'materials/6_dis_booth.PNG', 'materials/6_wash.PNG', 'materials/7_chair.png', 'materials/7_dis_tree.png', 'materials/8_dis_wash.png', 'materials/8_palmtree.png', 'materials/9_dis_mailbox.png', 'materials/9_roadtrack.png', 'materials/10_dis_car.png', 'materials/10_trash.png', 'materials/11_coffeeshop.png', 'materials/11_dis_building.png', 'materials/12_dis_bank.png', 'materials/12_gym.png', 'materials/13_dis_cafe.png', 'materials/13_hospital.png', 'materials/14_barbershop.png', 'materials/14_dis_hotel.png', 'materials/15_dis_police.png', 'materials/15_police.png', 'materials/16_burger.png', 'materials/16_dis_castle.PNG', 'materials/17_bank.png', 'materials/17_dis_shop.png', 'Avatar/Case_1.png', 'Avatar/Case_2.png', 'Avatar/Case_3.png', 'Avatar/Case_4.png', 'Avatar/Case_5.png', 'Avatar/Case_6.png', 'Avatar/Case_7.png', 'Avatar/Case_8.png', 'Avatar/Female_23.png', 'Avatar/Female_29.png', 'Avatar/Female_31.png', 'Avatar/Female_39.png', 'Avatar/Male_21.png', 'Avatar/Male_25.png', 'Avatar/Male_33.png', 'Avatar/Male_35.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 960]
  color = -1.0000, -1.0000, -1.0000
  expName = VR_Memory_Test_Day2
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine thanks
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent thankstext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        您现在已经完成了上机部分的实验。

        请按任意键结束本部分的实验。

        请您休息一会儿，谢谢您的参与~！
  Routine tr3
    ImageComponent image_3
      image = arrang2.png
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent drag
      Code Type = Both
      Begin Experiment:
        ## code for py->js
        #shuffle = util.shuffle
        #win = psychoJS.window
        #thisExp = psychoJS.experiment
      Begin JS Experiment:
        var new_scenes, new_scene_value;
      Begin JS Routine:
        psychoJS.experiment.addData("stage", "Arrangement");
        function shuffle_twolist(list1, list2) {
            // Create shuffled index based on length of list1
            const shuffled_indices = [...Array(list1.length).keys()].sort(() => Math.random() - 0.5);

            // Create shuffled lists using the generated indices
            const shuffled_list1 = shuffled_indices.map((i) => list1[i]);
            const shuffled_list2 = shuffled_indices.map((i) => list2[i]);

            return [shuffled_list1, shuffled_list2];
          }

        scenes = [label1, label2, label3, label4, label5, label6, label7, label8, label9, label10, label11, label12, label13, label14];
        scene_value = ["flower", "bin", "sofa", "plant", "mailbox", "wash", "CaseAvatar1", "CaseAvatar2", "CaseAvatar3", "CaseAvatar4", "CaseAvatar5", "CaseAvatar6", "CaseAvatar7", "CaseAvatar8"];
        //[new_scenes, new_scene_value] = shuffle_twolist(scenes, scene_value);
        new_scenes = shuffle_twolist(scenes, scene_value)[0];
        new_scene_value = shuffle_twolist(scenes, scene_value)[1];

        psychoJS.experiment.addData("scenes", new_scene_value);
        for (var pointer, _pj_c = 0, _pj_a = util.range(new_scenes.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            pointer = _pj_a[_pj_c];
            var x = ((- 0.8) + (Math.floor(pointer / 6) * 0.1));
            var y = ((0.15 * (pointer % 6)) - 0.37);
            new_scenes[pointer].setPos([x, y]);
        //    [wid, hei] = new_scenes[pointer].size;
            var wid = new_scenes[pointer].size[0];
            var hei = new_scenes[pointer].size;[1];
            console.log("wid: ", wid);
            if (((wid > 0.125) || (wid < 0.115))) {
                new_scenes[pointer].setSize([new_size, new_size]);
            }
            console.log(new_scene_value[pointer], "(", x, ",", y, ")");
        }
        drag_in_process = false;
        clicked_stim = null;
        psychoJS.experiment.nextEntry();
      Begin Routine:
        # define scene terms
        thisExp.addData("stage","Arrangement")




        def shuffle_twolist(list1, list2):
            b =  [i for i in range(len(list1))]
            np.random.shuffle(b)
            sorted_list1 = [t[1] for t in sorted(zip(b, list1), key=lambda x: x[0]) ]
            sorted_list2 = [t[1] for t in sorted(zip(b, list2), key=lambda x: x[0]) ]
            return sorted_list1, sorted_list2

        scenes = [label1, label2, label3, label4, label5, label6,label7, label8,label9,label10,label11,label12,label13,label14]
        scene_value = ['flower','bin','sofa','plant','mailbox','wash','CaseAvatar1', 'CaseAvatar2', 'CaseAvatar3', 'CaseAvatar4', 'CaseAvatar5', 'CaseAvatar6', 'CaseAvatar7', 'CaseAvatar8']

        new_scenes,new_scene_value = shuffle_twolist(scenes, scene_value)
        #new_scenes,new_scene_value = scenes, scene_value
        print(new_scenes)
        print(new_scene_value)

        #shuffle(scenes)
        thisExp.addData('scenes', new_scene_value)



        # set pos of different figures
        for pointer in range(len(new_scenes)):
            # 0 1 2 3 / 4 5 6 7
            # 0.45/0.15/-0.25/-0.45 0.15*(x % 4)-0.45
            x = -0.8+(pointer // 6)*0.1
            y = 0.15*(pointer % 6)-0.37
            new_scenes[pointer].setPos([x, y])
            wid, hei = new_scenes[pointer].size
            print("wid: ",wid)
            if wid > 0.125 or wid < 0.115:
                new_scenes[pointer].setSize([new_size, new_size])
            print(new_scene_value[pointer],'(',x,',',y,')' )

        drag_in_process = False
        clicked_stim = None


        thisExp.nextEntry()
        ## textstime list
        #stimuli = []
        #x_pos = [-0.7, -0.6, -0.5]
        #for i in range(len(scenes)):
        #    stimuli.append(visual.TextStim(win=win, name=str(i), text=scenes[i],
        #    font='Open Sans', pos=(x_pos[int(i / 4)], 0.3 - 0.1 * (i % 4)),
        #    height=0.03, color='red', colorSpace='rgb'))
        #    stimuli[i].setAutoDraw(True)
        #
        ## used in each frame

        #
        ##event.clearEvents()
      Each Frame:
        if not drag_in_process:
            for i in range(len(new_scenes)):
                if mouse.isPressedIn(new_scenes[i]):
                    # drag start
                    drag_in_process = True
                    clicked_stim = new_scenes[i]
                    thisExp.addData('scene', new_scene_value[i])
                    # clear list
                    mouse.x = []
                    mouse.y = []
                    mouse.time = []
                    break
        if mouse.getPressed()[0] == 1:
            # set stimulus pos
            if drag_in_process:
                clicked_stim.pos = mouse.getPos()
        else:
            # drag end
            if drag_in_process:
                # record stimulus pos and time
                thisExp.addData('item.x', mouse.x)
                thisExp.addData('item.y', mouse.y)
                thisExp.addData('item.time', mouse.time)
                thisExp.nextEntry()
            drag_in_process = False
      Each JS Frame:
        if ((! drag_in_process)) {
            for (var i, _pj_c = 0, _pj_a = util.range(new_scenes.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                if (mouse.isPressedIn(new_scenes[i])) {
                    drag_in_process = true;
                    clicked_stim = new_scenes[i];
                    psychoJS.experiment.addData("scene", new_scene_value[i]);
                    mouse.x = [];
                    mouse.y = [];
                    mouse.time = [];
                    break;
                }
            }
        }
        if ((mouse.getPressed()[0] === 1)) {
            if (drag_in_process) {
                clicked_stim.pos = mouse.getPos();
            }
        } else {
            if (drag_in_process) {
                psychoJS.experiment.addData("item.x", mouse.x);
                psychoJS.experiment.addData("item.y", mouse.y);
                psychoJS.experiment.addData("item.time", mouse.time);
                psychoJS.experiment.nextEntry();
            }
            drag_in_process = false;
        }
      End JS Routine:
        screenshot = psychoJS.window.getMovieFrame();
        screenshot.save((((("d2data/" + expInfo["participant"]) + "_") + pictype.toString()) + "_arrangement.png"));
        //psychoJS.window.clearBuffer();
        //
      End Routine:
        ## record end time
        #thisExp.addData('end_time', mouse.mouseClock.getTime())
        #thisExp.nextEntry()
        screenshot = win.getMovieFrame()
        screenshot.save('d2data/'+expInfo['participant']+'_'+str(pictype)+'_arrangement.png')
        win.clearBuffer()
    ImageComponent scene
      image = p.png
      pos = (0.1, 0)
      size = (0.96, 1.2)
      startVal [time (s)] = 0.0
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    ImageComponent label1
      image = material2/1_flower.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label2
      image = material2/2_bin.PNG
      size = (0.08, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label3
      image = material2/3_sofa.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label4
      image = material2/4_plant.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label5
      image = material2/5_mail.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label6
      image = material2/6_wash.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label7
      image [set every repeat] = $t1
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent label8
      image [set every repeat] = $t2
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent label9
      image [set every repeat] = $t3
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent label10
      image [set every repeat] = $t4
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent label11
      image [set every repeat] = $t5
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label12
      image [set every repeat] = $t6
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label13
      image [set every repeat] = $t7
      size = (0.11, 0.11)
      startVal [time (s)] = 0.0
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    ImageComponent label14
      image [set every repeat] = $t8
      size = (0.11, 0.11)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.0353, 1.0000, 0.4588
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, -0.37)
      size = (0.2,0.07)
      startVal [time (s)] = 0
      text = Finish
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      callback:
        continueRoutine = False
  Routine intro2
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = TestD22.png
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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  Routine intro
    ImageComponent image_4
      image = TestD21.png
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro3
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_n
      image = TestM3.PNG
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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  Routine trial1
    ImageComponent landmark
      image [set every repeat] = $image
      pos = (0, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.8, 0.08)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5,6,7)
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    CodeComponent code
      Code Type = Both
      Before JS Experiment:
        var px_pos;
      Begin JS Routine:
        is_pressed = false;
      Begin Routine:
        is_pressed = False
      Each Frame:
        vall = slider.markerPos
        if vall != None:

            vtxt.text = "当前您的评分： "+ str(round(vall,3))

        #    vtxt.text = "当前的奖金分配选择：\n您的奖金 : 对方的奖金 = " + str(yours) + " : " + str(oppos)
        #    您选择：\n{:,.2f}:{:,.2f} 分配方式\n您将得到：￥{:,.2f}\n对方将得到：￥{:,.2f}'.format(yours,oppos,yourm,oppsm)
        if not is_pressed and status_mouse.getPressed()[0]:
            is_pressed = True
            slider.fillColor = "blue"
            timer = core.CountdownTimer(0.3)

        # if slider has been clicked
        if is_pressed:
            if timer.getTime() <= 0:
                continueRoutine = False
        else:
            slider.fillColor = "red"
            slider.markerPos = slider._posToRating(slider.mouse.getPos())
            slider.recordRating(slider.markerPos)
      Each JS Frame:
        vall = slider.markerPos;
        if ((vall !== null)) {
            vtxt.text = ("\u5f53\u524d\u60a8\u7684\u8bc4\u5206\uff1a " + Math.round(vall, 3).toString());
        }
        if (((! is_pressed) && status_mouse.getPressed()[0])) {
            is_pressed = true;
            slider.fillColor = "blue";
            timer = new util.CountdownTimer(0.3);

        }
        if (is_pressed) {
            if ((timer.getTime() <= 0)) {
                continueRoutine = false;
            }
        } else {
            slider.fillColor = "red";

            px_pos = util.to_px(status_mouse.getPos(), "height", psychoJS.window);
            slider.markerPos = slider._posToRating(px_pos);

        //    slider.markerPos = slider._posToRating(slider.mouse.getPos());
            slider.recordRating(slider.markerPos);
        }
      End JS Routine:
        is_pressed = false;
        psychoJS.experiment.addData("stage", "rate");
      End Routine:
        is_pressed = False
        thisExp.addData("stage","rate")
    MouseComponent status_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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    TextComponent vtxt
      color = -1.0000, 1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = yellow
      letterHeight = 0.04
      pos = (-0.01, -0.23)
      startVal [time (s)] = 0.0
      text = 一点也不喜欢                                                       非常喜欢
      wrapWidth = 2
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  Routine fixation
    PolygonComponent iti
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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  Routine tr2
    MouseComponent tmouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent drg
      Code Type = Both
      Begin Experiment:
        ## code for py->js
        #shuffle = util.shuffle
        #win = psychoJS.window
        #thisExp = psychoJS.experiment
        count = 1
      Begin JS Experiment:
        count = 1;
      Begin JS Routine:
        psychoJS.experiment.addData("stage", "Pair_Rate");
        drg_in_process = false;
        clicked_stim = null;
        psychoJS.experiment.nextEntry();
      Begin Routine:
        # define scene terms
        thisExp.addData("stage","Pair_Rate")
        drg_in_process = False
        clicked_stim = None
        thisExp.nextEntry()
      Each Frame:
        if not drg_in_process:
            if tmouse.isPressedIn(landmark_2):
                # drag start
                drg_in_process = True
                # clear list
                clicked_stim = landmark_2
                tmouse.x = []
                tmouse.y = []
                tmouse.time = []
        #        break
        if tmouse.getPressed()[0] == 1:
            # set stimulus pos
            if drg_in_process:
                clicked_stim.pos = tmouse.getPos()
        else:
            # drag end
            if drg_in_process:
                # record stimulus pos and time
                thisExp.addData('item.x', tmouse.x)
                thisExp.addData('item.y', tmouse.y)
                thisExp.addData('item.time', tmouse.time)
        #        thisExp.nextEntry()
        #        continueRoutine = False
            drg_in_process = False
      Each JS Frame:
        if ((! drg_in_process)) {
            if (tmouse.isPressedIn(landmark_2)) {
                drg_in_process = true;
                clicked_stim = landmark_2;
                tmouse.x = [];
                tmouse.y = [];
                tmouse.time = [];
            }
        }
        if ((tmouse.getPressed()[0] === 1)) {
            if (drg_in_process) {
                clicked_stim.pos = tmouse.getPos();
            }
        } else {
            if (drg_in_process) {
                psychoJS.experiment.addData("item.x", tmouse.x);
                psychoJS.experiment.addData("item.y", tmouse.y);
                psychoJS.experiment.addData("item.time", tmouse.time);
            }
            drg_in_process = false;
        }
      End JS Routine:
        //var screenshot = psychoJS.window.getSnapshot();
        //screenshot.save((((("d2data/" + expInfo["participant"]) + "_count_") + count.toString()) + "_markmove.png"));
        //count += 1;
        //psychoJS.window.clearBuffer();
        landmark_2.setPos([(- 0.4), 0]);
        psychoJS.experiment.nextEntry();
      End Routine:
        ## record end time
        #thisExp.addData('end_time', mouse.mouseClock.getTime())
        #thisExp.nextEntry()

        screenshot = win.getMovieFrame()

        screenshot.save('d2data/'+expInfo['participant']+'_count_'+str(count)+'_markmove.png')
        count += 1
        win.clearBuffer()
        landmark_2.setPos([-0.4,0])
        thisExp.nextEntry()
    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.04, 0)
      shape = circle
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    ImageComponent landmark_1
      image [set every repeat] = $fixed
      pos = (0.04, 0)
      size [set every repeat] = (sizex,sizey)
      startVal [time (s)] = 0.0
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    ImageComponent landmark_2
      image [set every repeat] = $moved
      pos = (-0.4, 0)
      size [set every repeat] = (sizex, sizey)
      startVal [time (s)] = 0.0
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    ButtonComponent btn
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.0353, 1.0000, 0.4588
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, -0.37)
      size = (0.2,0.07)
      startVal [time (s)] = 0
      text = Finish
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      callback:
        continueRoutine = False
Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ratepic.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'image': 'materials/10_trash.png'},
      {'image': 'materials/11_coffeeshop.png'},
      {'image': 'materials/12_gym.png'},
      {'image': 'materials/13_hospital.png'},
      {'image': 'materials/14_barbershop.png'},
      {'image': 'materials/15_police.png'},
      {'image': 'materials/16_burger.png'},
      {'image': 'materials/17_bank.png'},
      {'image': 'materials/1_flower.PNG'},
      {'image': 'materials/2_bin.PNG'},
      {'image': 'materials/3_sofa.PNG'},
      {'image': 'materials/4_plant.PNG'},
      {'image': 'materials/5_mail.PNG'},
      {'image': 'materials/6_wash.PNG'},
      {'image': 'materials/7_chair.png'},
      {'image': 'materials/8_palmtree.png'},
      {'image': 'materials/9_roadtrack.png'},
      {'image': 'Avatar/Case_1.png'},
      {'image': 'Avatar/Case_2.png'},
      {'image': 'Avatar/Case_3.png'},
      {'image': 'Avatar/Case_4.png'},
      {'image': 'Avatar/Case_5.png'},
      {'image': 'Avatar/Case_6.png'},
      {'image': 'Avatar/Case_7.png'},
      {'image': 'Avatar/Case_8.png'},
      {'image': 'Avatar/Female_23.png'},
      {'image': 'Avatar/Female_29.png'},
      {'image': 'Avatar/Female_31.png'},
      {'image': 'Avatar/Female_39.png'},
      {'image': 'Avatar/Male_21.png'},
      {'image': 'Avatar/Male_25.png'},
      {'image': 'Avatar/Male_33.png'},
      {'image': 'Avatar/Male_35.png'}]
    Routine trial1
    Routine fixation
  LoopTerminator trials
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = pairloop.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'group_file': 'orderexcel/pair_drag_1.xlsx', 'sizex': 0.1, 'sizey': 0.1, 'pairtype': 'Case'},
      {'group_file': 'orderexcel/pair_drag_2.xlsx', 'sizex': 0.14, 'sizey': 0.14, 'pairtype': 'Human'},
      {'group_file': 'orderexcel/pair_drag_3.xlsx', 'sizex': 0.12, 'sizey': 0.12, 'pairtype': 'Landmark'}]
    Routine intro2
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = $group_file
      loopType = sequential
      nReps = 1
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      Routine tr2
    LoopTerminator trials_2
  LoopTerminator trials_3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = Arrange.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'t1': 'Avatar/Case_1.png', 't2': 'Avatar/Case_2.png', 't3': 'Avatar/Case_3.png', 't4': 'Avatar/Case_4.png', 't5': 'Avatar/Case_5.png', 't6': 'Avatar/Case_6.png', 't7': 'Avatar/Case_7.png', 't8': 'Avatar/Case_8.png', 'new_size': 0.1, 'pictype': 'CaseType'},
      {'t1': 'Avatar/Female_23.png', 't2': 'Avatar/Female_29.png', 't3': 'Avatar/Female_31.png', 't4': 'Avatar/Female_39.png', 't5': 'Avatar/Male_21.png', 't6': 'Avatar/Male_25.png', 't7': 'Avatar/Male_33.png', 't8': 'Avatar/Male_35.png', 'new_size': 0.13, 'pictype': 'HumanType'}]
    Routine intro3
    Routine tr3
  LoopTerminator trials_4
  Routine thanks
