PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'Precdata/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1607, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = VR_Memory_Test_Practice
  keyboardBackend = ioHub
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Routines
  Routine intro
    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = PracM1.PNG
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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    CodeComponent lsl_init
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet
        import random
        import time

        # 创建一个名为“MyStream”的新LSL流输出，一个通道
        info = StreamInfo('EEGStream', 'Markers', 1, 0, 'string', 'marker')


        #info = StreamInfo('MyMarkerStream', 'Markers', 1, 0, 'string', 'myuidw43536')

        # next make an outlet
        outlet = StreamOutlet(info)

        print("now sending markers...")
  Routine intro2
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = PracM2.PNG
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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  Routine fix
    PolygonComponent iti
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine thk
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent thankstext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        您现在已经完成了上机部分的实验。

        请按任意键结束本部分的实验。

        请您休息一会儿，谢谢您的参与~！
  Routine trialp
    MouseComponent mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent drag
      Code Type = Both
      Begin Experiment:
        ## code for py->js
        #shuffle = util.shuffle
        #win = psychoJS.window
        #thisExp = psychoJS.experiment
      Begin JS Experiment:
        shuffle = util.shuffle
        win = psychoJS.window
        thisExp = psychoJS.experiment
      Begin JS Routine:
        kinships = ["\u7238\u7238", "\u5988\u5988", "\u513f\u5b50", "\u5973\u513f", "\u54e5\u54e5", "\u5f1f\u5f1f", "\u59d0\u59d0", "\u59b9\u59b9", "\u7237\u7237", "\u5916\u516c", "\u5976\u5976", "\u5916\u5a46", "\u5b59\u5b50", "\u5916\u5b59", "\u5b59\u5973", "\u5916\u5b59\u5973", "\u53d4\u53d4", "\u4f2f\u4f2f", "\u8205\u8205", "\u59d1\u59d1", "\u59e8\u5988", "\u4f84\u5b50", "\u5916\u7525", "\u4f84\u5973", "\u5916\u7525\u5973", "\u5802\u54e5", "\u5802\u59d0", "\u5802\u5f1f", "\u5802\u59b9", "\u8868\u54e5", "\u8868\u59d0", "\u8868\u5f1f", "\u8868\u59b9"];
        shuffle(kinships);
        thisExp.addData("kinships", kinships);
        thisExp.nextEntry();
        stimuli = [];
        x_pos = [(- 0.9), (- 0.8), (- 0.7)];
        for (var i = 0, _pj_a = kinships.length; (i < _pj_a); i += 1) {
            stimuli.push(new visual.TextStim({"win": win, "name": i.toString(), "text": kinships[i], "font": "Open Sans", "pos": [x_pos[Number.parseInt((i / 11))], (0.5 - (0.1 * (i % 11)))], "height": 0.05, "color": "white", "colorSpace": "rgb"}));
            stimuli[i].setAutoDraw(true);
        }
        drag_in_process = false;
        clicked_stim = null;
      Begin Routine:
        # define scene terms
        scenes = ['垃圾桶', '洗衣机', '花', '盆栽', '邮箱', '沙发', '终点','理发店','警局','医院']
        shuffle(scenes)
        thisExp.addData('scenes', scenes)
        thisExp.nextEntry()
        # textstime list
        stimuli = []
        x_pos = [-0.7, -0.6, -0.5]
        for i in range(len(scenes)):
            stimuli.append(visual.TextStim(win=win, name=str(i), text=scenes[i],
            font='Open Sans', pos=(x_pos[int(i / 4)], 0.3 - 0.1 * (i % 4)),
            height=0.03, color='red', colorSpace='rgb'))
            stimuli[i].setAutoDraw(True)

        # used in each frame
        drag_in_process = False
        clicked_stim = None

        #event.clearEvents()
      Each Frame:
        if not drag_in_process:
            for i in range(len(stimuli)):
                if mouse.isPressedIn(stimuli[i]):
                    # drag start
                    drag_in_process = True
                    clicked_stim = stimuli[i]
                    thisExp.addData('scene', scenes[i])
                    # clear list
                    mouse.x = []
                    mouse.y = []
                    mouse.time = []
                    break
        if mouse.getPressed()[0] == 1:
            # set stimulus pos
            if drag_in_process:
                clicked_stim.pos = mouse.getPos()
        else:
            # drag end
            if drag_in_process:
                # record stimulus pos and time
                thisExp.addData('item.x', mouse.x)
                thisExp.addData('item.y', mouse.y)
                thisExp.addData('item.time', mouse.time)
                thisExp.nextEntry()
            drag_in_process = False

        if mouse.isPressedIn(end_rect):

            continueRoutine = False
      Each JS Frame:
        if ((! drag_in_process)) {
            for (var i = 0, _pj_a = stimuli.length; (i < _pj_a); i += 1) {
                if (mouse.isPressedIn(stimuli[i])) {
                    drag_in_process = true;
                    clicked_stim = stimuli[i];
                    thisExp.addData("kinship", kinships[i]);
                    mouse.x = [];
                    mouse.y = [];
                    mouse.time = [];
                    break;
                }
            }
        }
        if ((mouse.getPressed()[0] === 1)) {
            if (drag_in_process) {
                clicked_stim.pos = mouse.getPos();
            }
        } else {
            if (drag_in_process) {
                thisExp.addData("item.x", mouse.x);
                thisExp.addData("item.y", mouse.y);
                thisExp.addData("item.time", mouse.time);
                thisExp.nextEntry();
            }
            drag_in_process = false;
        }
        if (mouse.isPressedIn(end_rect)) {
            continueRoutine = false;
        }
      End JS Routine:
        thisExp.addData("end_time", mouse.mouseClock.getTime());
        thisExp.nextEntry();
      End Routine:
        # record end time
        thisExp.addData('end_time', mouse.mouseClock.getTime())
        thisExp.nextEntry()
    PolygonComponent end_rect
      fillColor = gray
      lineWidth = 5
      pos = (0.6, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 结束
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    ImageComponent image_3
      image = p.png
      size = (0.63, 0.8)
      startVal [time (s)] = 0.0
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  Routine trialn
    ImageComponent image_7
      image = prac_ins.png
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msge = ''
        corrlist = []
        effect = 0
      Begin Routine:
        newtext = ''
        corr = 0



        outlet.push_sample(["50"])
        def is_three_digit_number(s):
          if len(s) != 3:
            return False
          for c in s:
            if not c.isdigit():
              return False
          try:
            int(s)
            return True
          except ValueError:
            return False
      Each Frame:
        #def onClick():
        #    # 获取输入框中的值
        #    text = textbox_2.text
        #
        #    # 如果输入框为空，则禁用按钮
        #    if not text:
        #        button.enabled = False
        #    else:
        #        # 否则，将实验切换到下一个例程
        #        thisExp.nextEntry()
        newtext = textbox_2.text
      End Routine:
        thisExp.addData('corr',corr)



        if int(newtext) == int(order):
            outlet.push_sample(["51"])
        else:
            outlet.push_sample(["52"])

        if int(newtext) == int(order):
                corr = 1

        corrlist.append(corr)
        print("corrlist",corrlist)
    TextboxComponent textbox_2
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, -0.37)
      size = (0.3, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image [set every repeat] = $image1
      pos = (-0.5, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image [set every repeat] = $image2
      pos = (0, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      image [set every repeat] = $image3
      pos = (0.5, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.1529, 1.0000, 0.1059
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0.5, -0.37)
      size = (0.22,0.08)
      startVal [time (s)] = 0
      text [set every repeat] = Finish
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      callback:
        def is_three_digit_number(s):
          if len(s) != 3:
            return False
          for c in s:
            if not c.isdigit():
              return False
          try:
            int(s)
            return True
          except ValueError:
            return False

        if (is_three_digit_number(newtext)):
            print("newtext: ",newtext)

            if int(newtext) == int(order):
                corr = 1
            print(int(newtext) == int(order))
            continueRoutine = False
  Routine feedback
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        effcorrlist = corrlist[2:]
        rate = round(sum(effcorrlist)/len(effcorrlist),4)

        if rate < 0.67:
            msge = "你的准确率为:" + str(rate)+"\n\n需要继续测试\n\n按任意键以继续。"
        else:
            msge = "你的准确率为:" + str(rate)+"\n\n按任意键以继续。"
    TextComponent text_2
      color = yellow
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $msge
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine rest
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = +
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  Routine introrest
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 接下来是静息态扫描阶段，请你注视界面的+部分
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    TextComponent text_5
      letterHeight = 0.06
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 按任意键以继续
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(["20"])
        print(20)
  Routine outro
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        你已完成静息态部分

        接下来等待主试按"s"键进入记忆阶段
    KeyboardComponent key_resp_6
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = practicepic.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image1': 'materials/3_sofa.PNG', 'image2': 'materials/13_hospital.png', 'image3': 'materials/6_wash.PNG', 'order': 231.0},
      {'image1': 'materials/1_dis_cola.png', 'image2': 'materials/1_flower.PNG', 'image3': 'materials/4_plant.PNG', 'order': 21.0},
      {'image1': 'materials/2_bin.PNG', 'image2': 'materials/5_mail.PNG', 'image3': 'materials/4_plant.PNG', 'order': 312.0},
      {'image1': 'materials/13_hospital.png', 'image2': 'materials/3_sofa.PNG', 'image3': 'materials/1_flower.PNG', 'order': 123},
      {'image1': 'materials/12_dis_bank.png', 'image2': 'materials/6_wash.PNG', 'image3': 'materials/2_bin.PNG', 'order': 12.0},
      {'image1': 'materials/3_sofa.PNG', 'image2': 'materials/16_dis_castle.PNG', 'image3': 'materials/6_wash.PNG', 'order': 201.0},
      {'image1': 'materials/6_wash.PNG', 'image2': 'materials/1_flower.PNG', 'image3': 'materials/4_plant.PNG', 'order': 132.0},
      {'image1': 'materials/5_mail.PNG', 'image2': 'materials/16_dis_castle.PNG', 'image3': 'materials/6_wash.PNG', 'order': 102.0},
      {'image1': 'materials/3_dis_sofa.PNG', 'image2': 'materials/13_dis_cafe.png', 'image3': 'materials/13_hospital.png', 'order': 1.0},
      {'image1': 'materials/11_coffeeshop.png', 'image2': 'materials/2_bin.PNG', 'image3': 'materials/14_dis_hotel.png', 'order': 120.0},
      {'image1': 'materials/1_flower.PNG', 'image2': 'materials/3_sofa.PNG', 'image3': 'materials/5_mail.PNG', 'order': 321},
      {'image1': 'materials/3_sofa.PNG', 'image2': 'materials/13_hospital.png', 'image3': 'materials/2_bin.PNG', 'order': 213.0}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
    Routine fix
    Routine trialn
  LoopTerminator trials
  Routine feedback
  Routine thk
