PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '1', 'version': 'ESY'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = VR_Memory_Test_Practice
  keyboardBackend = ioHub
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Routines
  Routine intro
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = TestM2.PNG
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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    CodeComponent startup_code
      Code Type = Auto->JS
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      Begin Experiment:
        # The only way to win... is to play the game, actually
        cash_money = 0

        excelnumber = int(expInfo['session'])


        #order_num = int(random.random() * 50)
        #order = f"{order_num:03}"
        #order_file = f"orders/session{expInfo['session']}/order{order}.csv"
        #t_order_file = f"orders/session{expInfo['session']}/secorder{order}.csv"

        if expInfo['version'] == 'ESY':
            w_file = 'orderexcel_ESY/' + str(excelnumber) + '.xlsx'
            arrange_file = 'Arrange_ESY.xlsx'
        else:
            w_file = 'orderexcel/' + str(excelnumber) + '.xlsx'
            arrange_file = 'Arrange.xlsx'
    CodeComponent lsl_init
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet
        import random
        import time


        from pylsl import StreamInfo, StreamOutlet

        # 创建一个名为“MyStream”的新LSL流输出，一个通道
        info = StreamInfo('EEGStream', 'Markers', 1, 0, 'string', 'marker')


        #info = StreamInfo('MyMarkerStream', 'Markers', 1, 0, 'string', 'myuidw43536')

        # next make an outlet
        outlet = StreamOutlet(info)

        print("now sending markers...")
  Routine intro2
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = TestM3.PNG
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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  Routine fix
    PolygonComponent iti
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine thk
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent thankstext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        您现在已经完成了上机部分的实验。

        请按任意键结束本部分的实验。

        请您休息一会儿，谢谢您的参与~！
  Routine trialp
    ImageComponent image_3
      image = arrang.png
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent drag
      Code Type = Both
      Begin Experiment:
        ## code for py->js
        #shuffle = util.shuffle
        #win = psychoJS.window
        #thisExp = psychoJS.experiment
      Begin JS Experiment:
        shuffle = util.shuffle
        win = psychoJS.window
        thisExp = psychoJS.experiment
      Begin JS Routine:
        kinships = ["\u7238\u7238", "\u5988\u5988", "\u513f\u5b50", "\u5973\u513f", "\u54e5\u54e5", "\u5f1f\u5f1f", "\u59d0\u59d0", "\u59b9\u59b9", "\u7237\u7237", "\u5916\u516c", "\u5976\u5976", "\u5916\u5a46", "\u5b59\u5b50", "\u5916\u5b59", "\u5b59\u5973", "\u5916\u5b59\u5973", "\u53d4\u53d4", "\u4f2f\u4f2f", "\u8205\u8205", "\u59d1\u59d1", "\u59e8\u5988", "\u4f84\u5b50", "\u5916\u7525", "\u4f84\u5973", "\u5916\u7525\u5973", "\u5802\u54e5", "\u5802\u59d0", "\u5802\u5f1f", "\u5802\u59b9", "\u8868\u54e5", "\u8868\u59d0", "\u8868\u5f1f", "\u8868\u59b9"];
        shuffle(kinships);
        thisExp.addData("kinships", kinships);
        thisExp.nextEntry();
        stimuli = [];
        x_pos = [(- 0.9), (- 0.8), (- 0.7)];
        for (var i = 0, _pj_a = kinships.length; (i < _pj_a); i += 1) {
            stimuli.push(new visual.TextStim({"win": win, "name": i.toString(), "text": kinships[i], "font": "Open Sans", "pos": [x_pos[Number.parseInt((i / 11))], (0.5 - (0.1 * (i % 11)))], "height": 0.05, "color": "white", "colorSpace": "rgb"}));
            stimuli[i].setAutoDraw(true);
        }
        drag_in_process = false;
        clicked_stim = null;
      Begin Routine:
        # define scene terms
        thisExp.addData("stage","Arrangement")


        #label


        if pictype == "CaseType":
            outlet.push_sample(["201"])
            print(201)
        else:
            outlet.push_sample(["202"])
            print(202)



        def shuffle_twolist(list1, list2):
            b =  [i for i in range(len(list1))]
            np.random.shuffle(b)
            sorted_list1 = [t[1] for t in sorted(zip(b, list1), key=lambda x: x[0]) ]
            sorted_list2 = [t[1] for t in sorted(zip(b, list2), key=lambda x: x[0]) ]
            return sorted_list1, sorted_list2

        scenes = [label1, label2, label3, label4, label5, label6,label7, label8,label9,label10,label11,label12,label13,label14,startpoint, endpoint]
        scene_value = ['flower','bin','sofa','plant','mailbox','wash','CaseAvatar1', 'CaseAvatar2', 'CaseAvatar3', 'CaseAvatar4', 'CaseAvatar5', 'CaseAvatar6', 'CaseAvatar7', 'CaseAvatar8','startpoint','endpoint']

        new_scenes,new_scene_value = shuffle_twolist(scenes, scene_value)
        #new_scenes,new_scene_value = scenes, scene_value
        print(new_scenes)
        print(new_scene_value)

        #shuffle(scenes)
        thisExp.addData('scenes', new_scene_value)



        # set pos of different figures
        for pointer in range(len(new_scenes)):
            # 0 1 2 3 / 4 5 6 7
            # 0.45/0.15/-0.25/-0.45 0.15*(x % 4)-0.45
            x = -0.8+(pointer // 6)*0.1
            y = 0.15*(pointer % 6)-0.37
            new_scenes[pointer].setPos([x, y])
            new_scenes[pointer].setSize([new_size, new_size])
            print(new_scene_value[pointer],'(',x,',',y,')' )

        drag_in_process = False
        clicked_stim = None





        thisExp.nextEntry()
        ## textstime list
        #stimuli = []
        #x_pos = [-0.7, -0.6, -0.5]
        #for i in range(len(scenes)):
        #    stimuli.append(visual.TextStim(win=win, name=str(i), text=scenes[i],
        #    font='Open Sans', pos=(x_pos[int(i / 4)], 0.3 - 0.1 * (i % 4)),
        #    height=0.03, color='red', colorSpace='rgb'))
        #    stimuli[i].setAutoDraw(True)
        #
        ## used in each frame

        #
        ##event.clearEvents()
      Each Frame:
        if not drag_in_process:
            for i in range(len(new_scenes)):
                if mouse.isPressedIn(new_scenes[i]):
                    # drag start
                    drag_in_process = True
                    clicked_stim = new_scenes[i]
                    thisExp.addData('scene', new_scene_value[i])
                    outlet.push_sample(["203"])
                    print(203)
                    # clear list
                    mouse.x = []
                    mouse.y = []
                    mouse.time = []
                    break
        if mouse.getPressed()[0] == 1:
            # set stimulus pos
            if drag_in_process:
                clicked_stim.pos = mouse.getPos()
        else:
            # drag end
            if drag_in_process:
                # record stimulus pos and time
                thisExp.addData('item.x', mouse.x)
                thisExp.addData('item.y', mouse.y)
                thisExp.addData('item.time', mouse.time)
                thisExp.nextEntry()
            drag_in_process = False
      Each JS Frame:
        if ((! drag_in_process)) {
            for (var i = 0, _pj_a = stimuli.length; (i < _pj_a); i += 1) {
                if (mouse.isPressedIn(stimuli[i])) {
                    drag_in_process = true;
                    clicked_stim = stimuli[i];
                    thisExp.addData("kinship", kinships[i]);
                    mouse.x = [];
                    mouse.y = [];
                    mouse.time = [];
                    break;
                }
            }
        }
        if ((mouse.getPressed()[0] === 1)) {
            if (drag_in_process) {
                clicked_stim.pos = mouse.getPos();
            }
        } else {
            if (drag_in_process) {
                thisExp.addData("item.x", mouse.x);
                thisExp.addData("item.y", mouse.y);
                thisExp.addData("item.time", mouse.time);
                thisExp.nextEntry();
            }
            drag_in_process = false;
        }
        if (mouse.isPressedIn(end_rect)) {
            continueRoutine = false;
        }
      End JS Routine:
        thisExp.addData("end_time", mouse.mouseClock.getTime());
        thisExp.nextEntry();
      End Routine:
        ## record end time
        #thisExp.addData('end_time', mouse.mouseClock.getTime())
        #thisExp.nextEntry()
        outlet.push_sample(["204"])
        print(204)
        screenshot = win.getMovieFrame()
        screenshot.save('data/'+expInfo['participant']+'_'+str(pictype)+'_arrangement.png')
        win.clearBuffer()
    ImageComponent scene
      image = p.png
      pos = (0.1, 0)
      size = (0.96, 1.2)
      startVal [time (s)] = 0.0
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    ImageComponent label1
      image = material2/1_flower.PNG
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label2
      image = material2/2_bin.PNG
      size = (0.08, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label3
      image = material2/3_sofa.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label4
      image = material2/4_plant.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label5
      image = material2/5_mail.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label6
      image = material2/6_wash.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label7
      image [set every repeat] = $t1
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label8
      image [set every repeat] = $t2
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label9
      image [set every repeat] = $t3
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label10
      image [set every repeat] = $t4
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent startpoint
      image = startpoint.png
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent endpoint
      image = endpoint.png
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent label11
      image [set every repeat] = $t5
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label12
      image [set every repeat] = $t6
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label13
      image [set every repeat] = $t7
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label14
      image [set every repeat] = $t8
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.0353, 1.0000, 0.4588
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, -0.37)
      size = (0.2,0.07)
      startVal [time (s)] = 0
      text = Finish
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      callback:
        continueRoutine = False
  Routine trialn
    ImageComponent bac
      image = bac.png
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent image_4
      image [set every repeat] = $fig_location
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 's','k'
      correctAns = $corr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        values = ""
        valuex = ""
        valuey = ""
        valuez = ""
      Begin Routine:
        thisExp.addData("stage","Recall")

        thisExp.addData("stage","Recall")

        if indicator == 'scene_things':
            valuex = "15"

        elif indicator == 'building':
            valuex = "16"

        elif indicator == 'Case':
            valuex = "17"
        else:
            valuex = "18"

        if corr == "s":
            valuey = "1"
        else:
            valuey = "2"

        outlet.push_sample([valuex+valuey])
      End Routine:
        if key_resp_4.corr:
            valuez = "3"
        else:
            valuez = "4"

        outlet.push_sample([valuex+valuez])
        print(valuex+valuez)
Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $w_file
    loopType = sequential
    nReps = 0
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    Routine fix
    Routine trialn
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $arrange_file
    loopType = random
    nReps = 1
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    Routine intro2
    Routine trialp
  LoopTerminator trials_2
  Routine thk
