PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'd2data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['materials/1_dis_cola.png', 'materials/1_flower.PNG', 'materials/2_bin.PNG', 'materials/2_dis_Traflight.png', 'materials/3_dis_sofa.PNG', 'materials/3_sofa.PNG', 'materials/4_dis_lemontree.PNG', 'materials/4_plant.PNG', 'materials/5_dis_chair.png', 'materials/5_mail.PNG', 'materials/6_dis_booth.PNG', 'materials/6_wash.PNG', 'materials/7_chair.png', 'materials/7_dis_tree.png', 'materials/8_dis_wash.png', 'materials/8_palmtree.png', 'materials/9_dis_mailbox.png', 'materials/9_roadtrack.png', 'materials/10_dis_car.png', 'materials/10_trash.png', 'materials/11_coffeeshop.png', 'materials/11_dis_building.png', 'materials/12_dis_bank.png', 'materials/12_gym.png', 'materials/13_dis_cafe.png', 'materials/13_hospital.png', 'materials/14_barbershop.png', 'materials/14_dis_hotel.png', 'materials/15_dis_police.png', 'materials/15_police.png', 'materials/16_burger.png', 'materials/16_dis_castle.PNG', 'materials/17_bank.png', 'materials/17_dis_shop.png', 'Avatar/Case_1.png', 'Avatar/Case_2.png', 'Avatar/Case_3.png', 'Avatar/Case_4.png', 'Avatar/Case_5.png', 'Avatar/Case_6.png', 'Avatar/Case_7.png', 'Avatar/Case_8.png', 'Avatar/Female_23.png', 'Avatar/Female_29.png', 'Avatar/Female_31.png', 'Avatar/Female_39.png', 'Avatar/Male_21.png', 'Avatar/Male_25.png', 'Avatar/Male_33.png', 'Avatar/Male_35.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1820, 1000]
  color = -1.0000, -1.0000, -1.0000
  expName = VR_Memory_Test_Day2
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine thanks
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent thankstext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        您现在已经完成了上机部分的实验。

        请按任意键结束本部分的实验。

        请您休息一会儿，谢谢您的参与~！
  Routine tr3
    ImageComponent image_3
      image = arrang2.png
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent drag
      Code Type = Both
      Begin Experiment:
        ## code for py->js
        #shuffle = util.shuffle
        #win = psychoJS.window
        #thisExp = psychoJS.experiment
      Begin JS Experiment:
        var new_scenes, new_scene_value;
      Begin JS Routine:
        psychoJS.experiment.addData("stage", "Arrangement");
        function shuffle_twolist(list1, list2) {
            // Create shuffled index based on length of list1
            const shuffled_indices = [...Array(list1.length).keys()].sort(() => Math.random() - 0.5);

            // Create shuffled lists using the generated indices
            const shuffled_list1 = shuffled_indices.map((i) => list1[i]);
            const shuffled_list2 = shuffled_indices.map((i) => list2[i]);

            return [shuffled_list1, shuffled_list2];
          }

        scenes = [label1, label2, label3, label4, label5, label6, label7, label8, label9, label10, label11, label12, label13, label14];
        scene_value = ["flower", "bin", "sofa", "plant", "mailbox", "wash", "CaseAvatar1", "CaseAvatar2", "CaseAvatar3", "CaseAvatar4", "CaseAvatar5", "CaseAvatar6", "CaseAvatar7", "CaseAvatar8"];
        //[new_scenes, new_scene_value] = shuffle_twolist(scenes, scene_value);
        new_scenes = shuffle_twolist(scenes, scene_value)[0];
        new_scene_value = shuffle_twolist(scenes, scene_value)[1];

        psychoJS.experiment.addData("scenes", new_scene_value);
        for (var pointer, _pj_c = 0, _pj_a = util.range(new_scenes.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            pointer = _pj_a[_pj_c];
            var x = ((- 0.8) + (Math.floor(pointer / 6) * 0.1));
            var y = ((0.15 * (pointer % 6)) - 0.37);
            new_scenes[pointer].setPos([x, y]);
        //    [wid, hei] = new_scenes[pointer].size;
            var wid = new_scenes[pointer].size[0];
            var hei = new_scenes[pointer].size[1];
            console.log("wid: ", wid);
            if (((wid > 0.125) || (wid < 0.115))) {
                new_scenes[pointer].setSize([new_size, new_size]);
            }
            if (new_scene_value[pointer].startsWith("CaseAvatar")) {
                new_scenes[pointer].setSize([new_size, new_size]);
            }
            console.log(new_scene_value[pointer], "(", x, ",", y, ")");
        }
        drag_in_process = false;
        clicked_stim = null;
        psychoJS.experiment.nextEntry();
      Begin Routine:
        # define scene terms
        thisExp.addData("stage","Arrangement")


        def shuffle_twolist(list1, list2):
            b =  [i for i in range(len(list1))]
            np.random.shuffle(b)
            sorted_list1 = [t[1] for t in sorted(zip(b, list1), key=lambda x: x[0]) ]
            sorted_list2 = [t[1] for t in sorted(zip(b, list2), key=lambda x: x[0]) ]
            return sorted_list1, sorted_list2

        scenes = [label1, label2, label3, label4, label5, label6,label7, label8,label9,label10,label11,label12,label13,label14]
        scene_value = ['flower','bin','sofa','plant','mailbox','wash','CaseAvatar1', 'CaseAvatar2', 'CaseAvatar3', 'CaseAvatar4', 'CaseAvatar5', 'CaseAvatar6', 'CaseAvatar7', 'CaseAvatar8']

        new_scenes,new_scene_value = shuffle_twolist(scenes, scene_value)
        #new_scenes,new_scene_value = scenes, scene_value
        print(new_scenes)
        print(new_scene_value)

        #shuffle(scenes)
        thisExp.addData('scenes', new_scene_value)



        # set pos of different figures
        for pointer in range(len(new_scenes)):
            # 0 1 2 3 / 4 5 6 7
            # 0.45/0.15/-0.25/-0.45 0.15*(x % 4)-0.45
            x = -0.8+(pointer // 6)*0.1
            y = 0.15*(pointer % 6)-0.37
            new_scenes[pointer].setPos([x, y])
            wid, hei = new_scenes[pointer].size
            print("wid: ",wid)
            if new_scene_value[pointer].startswith("CaseAvatar"):
                new_scenes[pointer].setSize([new_size, new_size])

        #    if wid > 0.125 or wid < 0.115:
        #        new_scenes[pointer].setSize([new_size, new_size])
            print(new_scene_value[pointer],'(',x,',',y,')' )

        drag_in_process = False
        clicked_stim = None


        thisExp.nextEntry()
        ## textstime list
        #stimuli = []
        #x_pos = [-0.7, -0.6, -0.5]
        #for i in range(len(scenes)):
        #    stimuli.append(visual.TextStim(win=win, name=str(i), text=scenes[i],
        #    font='Open Sans', pos=(x_pos[int(i / 4)], 0.3 - 0.1 * (i % 4)),
        #    height=0.03, color='red', colorSpace='rgb'))
        #    stimuli[i].setAutoDraw(True)
        #
        ## used in each frame

        #
        ##event.clearEvents()
      Each Frame:
        if not drag_in_process:
            for i in range(len(new_scenes)):
                if mouse.isPressedIn(new_scenes[i]):
                    # drag start
                    drag_in_process = True
                    clicked_stim = new_scenes[i]
                    thisExp.addData('scene', new_scene_value[i])
                    # clear list
                    mouse.x = []
                    mouse.y = []
                    mouse.time = []
                    break
        if mouse.getPressed()[0] == 1:
            # set stimulus pos
            if drag_in_process:
                clicked_stim.pos = mouse.getPos()
        else:
            # drag end
            if drag_in_process:
                # record stimulus pos and time
                thisExp.addData('item.x', mouse.x)
                thisExp.addData('item.y', mouse.y)
                thisExp.addData('item.time', mouse.time)
                thisExp.nextEntry()
            drag_in_process = False
      Each JS Frame:
        if ((! drag_in_process)) {
            for (var i, _pj_c = 0, _pj_a = util.range(new_scenes.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                if (mouse.isPressedIn(new_scenes[i])) {
                    drag_in_process = true;
                    clicked_stim = new_scenes[i];
                    psychoJS.experiment.addData("scene", new_scene_value[i]);
                    mouse.x = [];
                    mouse.y = [];
                    mouse.time = [];
                    break;
                }
            }
        }
        if ((mouse.getPressed()[0] === 1)) {
            if (drag_in_process) {
                clicked_stim.pos = mouse.getPos();
            }
        } else {
            if (drag_in_process) {
                psychoJS.experiment.addData("item.x", mouse.x);
                psychoJS.experiment.addData("item.y", mouse.y);
                psychoJS.experiment.addData(+"item.time", mouse.time);
                psychoJS.experiment.nextEntry();
            }
            drag_in_process = false;
        }
      End JS Routine:
        //screenshot = psychoJS.window.getMovieFrame();
        //screenshot.save((((("d2data/" + expInfo["participant"]) + "_") + pictype.toString()) + "_arrangement.png"));
        //psychoJS.window.clearBuffer();
        //
      End Routine:
        ## record end time
        #thisExp.addData('end_time', mouse.mouseClock.getTime())
        #thisExp.nextEntry()
        screenshot = win.getMovieFrame()
        screenshot.save('d2data/'+expInfo['participant']+'_'+str(pictype)+'_arrangement.png')
        win.clearBuffer()
    ImageComponent scene
      image = p.png
      pos = (0.1, 0)
      size = (0.8, 1)
      startVal [time (s)] = 0.0
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    ImageComponent label1
      image = material2/1_flower.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label2
      image = material2/2_bin.PNG
      size = (0.08, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label3
      image = material2/3_sofa.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label4
      image = material2/4_plant.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label5
      image = material2/5_mail.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label6
      image = material2/6_wash.PNG
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent label7
      image [set every repeat] = $t1
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent label8
      image [set every repeat] = $t2
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent label9
      image [set every repeat] = $t3
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent label10
      image [set every repeat] = $t4
      size = (0.13, 0.13)
      startVal [time (s)] = 0.0
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    ImageComponent label11
      image [set every repeat] = $t5
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label12
      image [set every repeat] = $t6
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent label13
      image [set every repeat] = $t7
      size = (0.11, 0.11)
      startVal [time (s)] = 0.0
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    ImageComponent label14
      image [set every repeat] = $t8
      size = (0.11, 0.11)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.0353, 1.0000, 0.4588
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.75, -0.37)
      size = (0.18,0.06)
      startVal [time (s)] = 0
      text = Finish
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      callback:
        continueRoutine = False
  Routine intro2
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = TestD22.png
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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  Routine intro
    ImageComponent image_4
      image = TestD21.png
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro3
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_n
      image = TestM3.PNG
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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  Routine trial1
    ImageComponent landmark
      image [set every repeat] = $image
      pos = (0, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.8, 0.08)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5,6,7)
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    CodeComponent code
      Code Type = Both
      Before JS Experiment:
        var px_pos;
      Begin JS Routine:
        is_pressed = false;
      Begin Routine:
        is_pressed = False
      Each Frame:
        vall = slider.markerPos
        if vall != None:

            vtxt.text = "当前您的评分： "+ str(round(vall,3))

        #    vtxt.text = "当前的奖金分配选择：\n您的奖金 : 对方的奖金 = " + str(yours) + " : " + str(oppos)
        #    您选择：\n{:,.2f}:{:,.2f} 分配方式\n您将得到：￥{:,.2f}\n对方将得到：￥{:,.2f}'.format(yours,oppos,yourm,oppsm)
        if not is_pressed and status_mouse.getPressed()[0]:
            is_pressed = True
            slider.fillColor = "blue"
            timer = core.CountdownTimer(0.3)

        # if slider has been clicked
        if is_pressed:
            if timer.getTime() <= 0:
                continueRoutine = False
        else:
            slider.fillColor = "red"
            slider.markerPos = slider._posToRating(slider.mouse.getPos())
            slider.recordRating(slider.markerPos)
      Each JS Frame:
        vall = slider.markerPos;
        if ((vall !== null)) {
            vtxt.text = ("\u5f53\u524d\u60a8\u7684\u8bc4\u5206\uff1a " + Math.round(vall, 3).toString());
        }
        if (((! is_pressed) && status_mouse.getPressed()[0])) {
            is_pressed = true;
            slider.fillColor = "blue";
            timer = new util.CountdownTimer(0.3);

        }
        if (is_pressed) {
            if ((timer.getTime() <= 0)) {
                continueRoutine = false;
            }
        } else {
            slider.fillColor = "red";

            px_pos = util.to_px(status_mouse.getPos(), "height", psychoJS.window);
            slider.markerPos = slider._posToRating(px_pos);

        //    slider.markerPos = slider._posToRating(slider.mouse.getPos());
            slider.recordRating(slider.markerPos);
        }
      End JS Routine:
        is_pressed = false;
        psychoJS.experiment.addData("stage", "rate");
      End Routine:
        is_pressed = False
        thisExp.addData("stage","rate")
    MouseComponent status_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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    TextComponent vtxt
      color = -1.0000, 1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = yellow
      letterHeight = 0.04
      pos = (-0.01, -0.23)
      startVal [time (s)] = 0.0
      text = 一点也不喜欢                                                       非常喜欢
      wrapWidth = 2
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  Routine fixation
    PolygonComponent iti
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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  Routine tr2
    MouseComponent tmouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent drg
      Code Type = Both
      Begin Experiment:
        ## code for py->js
        #shuffle = util.shuffle
        #win = psychoJS.window
        #thisExp = psychoJS.experiment
        count = 1
      Begin JS Experiment:
        count = 1;
      Begin JS Routine:
        psychoJS.experiment.addData("stage", "Preference");
        function shuffle_twolist(list1, list2) {
            // Create shuffled index based on length of list1
            const shuffled_indices = [...Array(list1.length).keys()].sort(() => Math.random() - 0.5);

            // Create shuffled lists using the generated indices
            const shuffled_list1 = shuffled_indices.map((i) => list1[i]);
            const shuffled_list2 = shuffled_indices.map((i) => list2[i]);

            return [shuffled_list1, shuffled_list2];
          }

        scenes = [lmark1, lmark2, lmark3, lmark4, lmark5, lmark6, lmark7, lmark8];
        scene_value = ["CaseAvatar1", "CaseAvatar2", "CaseAvatar3", "CaseAvatar4", "CaseAvatar5", "CaseAvatar6", "CaseAvatar7", "CaseAvatar8"];
        [new_scenes, new_scene_value] = shuffle_twolist(scenes, scene_value);
        console.log(new_scenes);
        console.log(new_scene_value);
        psychoJS.experiment.addData("scenes", new_scene_value);
        for (var pointer, _pj_c = 0, _pj_a = util.range(new_scenes.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            pointer = _pj_a[_pj_c];
            var x = ((- 0.8) + ((pointer / 6) * 0.1));
            var y = ((0.15 * (pointer % 6)) - 0.37);
            new_scenes[pointer].setPos([x, y]);
            var wid = new_scenes[pointer].size[0];
            var hei = new_scenes[pointer].size[1];
            console.log("wid: ", wid);
            if (((wid > 0.125) || (wid < 0.115))) {
                new_scenes[pointer].setSize([new_size, new_size]);
            }
            if (new_scene_value[pointer].startsWith("CaseAvatar")) {
                new_scenes[pointer].setSize([new_size, new_size]);
            }
            console.log(new_scene_value[pointer], "(", x, ",", y, ")");
        }
        drg_in_process = false;
        clicked_stim = null;
        psychoJS.experiment.nextEntry();
      Begin Routine:
        # define scene terms
        thisExp.addData("stage","Emotion_Preference")


        def shuffle_twolist(list1, list2):
            b =  [i for i in range(len(list1))]
            np.random.shuffle(b)
            sorted_list1 = [t[1] for t in sorted(zip(b, list1), key=lambda x: x[0]) ]
            sorted_list2 = [t[1] for t in sorted(zip(b, list2), key=lambda x: x[0]) ]
            return sorted_list1, sorted_list2

        scenes = [lmark1, lmark2, lmark3, lmark4, lmark5, lmark6,lmark7, lmark8]
        scene_value = ['CaseAvatar1', 'CaseAvatar2', 'CaseAvatar3', 'CaseAvatar4', 'CaseAvatar5', 'CaseAvatar6', 'CaseAvatar7', 'CaseAvatar8']

        new_scenes,new_scene_value = shuffle_twolist(scenes, scene_value)
        #new_scenes,new_scene_value = scenes, scene_valueprint(new_scene_value)

        #shuffle(scenes)
        thisExp.addData('scenes', new_scene_value)

        # set pos of different figures
        for pointer in range(len(new_scenes)):
            # 0 1 2 3 / 4 5 6 7
            # 0.45/0.15/-0.25/-0.45 0.15*(x % 4)-0.45
            x = -0.8+(pointer // 6)*0.1
            y = 0.15*(pointer % 6)-0.37
            new_scenes[pointer].setPos([x, y])
            wid, hei = new_scenes[pointer].size

            print("wid: ",wid)
        #    if wid > 0.1:
        #        new_scenes[pointer].setSize([new_size, new_size])
            if new_scene_value[pointer].startswith("CaseAvatar"):
                new_scenes[pointer].setSize([new_size, new_size])
            print("V: ",new_scene_value[pointer],'(',x,',',y,')' )




        drg_in_process = False
        clicked_stim = None

        thisExp.nextEntry()
      Each Frame:
        if not drg_in_process:
            for i in range(len(new_scenes)):
                if tmouse.isPressedIn(new_scenes[i]):
                    # drag start
                    drg_in_process = True
                    clicked_stim = new_scenes[i]
                    thisExp.addData('scene', new_scene_value[i])
                    # clear list
                    tmouse.x = []
                    tmouse.y = []
                    tmouse.time = []
                    break
        if tmouse.getPressed()[0] == 1:
            # set stimulus pos
            if drg_in_process:
                clicked_stim.pos = tmouse.getPos()
        else:
            # drag end
            if drg_in_process:
                # record stimulus pos and time
                thisExp.addData('item.x', tmouse.x)
                thisExp.addData('item.y', tmouse.y)
                thisExp.addData('item.time', tmouse.time)
                thisExp.nextEntry()
            drg_in_process = False
      Each JS Frame:
        if ((! drg_in_process)) {
            for (var i, _pj_c = 0, _pj_a = util.range(new_scenes.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                if (tmouse.isPressedIn(new_scenes[i])) {
                    drg_in_process = true;
                    clicked_stim = new_scenes[i];
                    psychoJS.experiment.addData("scene", new_scene_value[i]);
                    tmouse.x = [];
                    tmouse.y = [];
                    tmouse.time = [];
                    break;
                }
            }
        }
        if ((tmouse.getPressed()[0] === 1)) {
            if (drg_in_process) {
                clicked_stim.pos = tmouse.getPos();
            }
        } else {
            if (drg_in_process) {
                psychoJS.experiment.addData("item.x", tmouse.x);
                psychoJS.experiment.addData("item.y", tmouse.y);
                psychoJS.experiment.addData("item.time", tmouse.time);
                psychoJS.experiment.nextEntry();
            }
            drg_in_process = false;
        }
      End JS Routine:
        //screenshot = psychoJS.window.getMovieFrame();
        //screenshot.save((((("d2data/" + expInfo["participant"]) + "_count_") + count.toString()) + "_markmove.png"));
        count += 1;
        //psychoJS.window.clearBuffer();
        psychoJS.experiment.nextEntry();
      End Routine:
        ## record end time
        #thisExp.addData('end_time', mouse.mouseClock.getTime())
        #thisExp.nextEntry()

        screenshot = win.getMovieFrame()

        screenshot.save('d2data/'+expInfo['participant']+'_count_'+str(count)+'_markmove.png')
        count += 1
        win.clearBuffer()

        thisExp.nextEntry()
    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.04, 0)
      shape = circle
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      image = grid.png
      pos = (0.04, 0)
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent hline
      disabled = True
      fillColor = white
      lineWidth = 5
      ori = 90
      pos = (0.04, 0)
      shape = line
      size = (1.2, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent vline
      disabled = True
      fillColor = white
      lineWidth = 5
      pos = (0.04, 0)
      shape = line
      size = (1.2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent lmark1
      image [set every repeat] = $t1
      pos = (0.04, 0)
      size [set every repeat] = (0.12,0.12)
      startVal [time (s)] = 0.0
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    ImageComponent lmark2
      image [set every repeat] = $t2
      pos = (-0.4, 0)
      size [set every repeat] = (0.12,0.12)
      startVal [time (s)] = 0.0
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    ButtonComponent btn
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.0353, 1.0000, 0.4588
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, -0.37)
      size = (0.18,0.06)
      startVal [time (s)] = 0
      text = Finish
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      callback:
        continueRoutine = False
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        for i in range(9):
            text_components[i].setAutoDraw(True)
      End Routine:
        for i in range(9):
            text_components[i].setAutoDraw(False)
    ImageComponent lmark3
      image [set every repeat] = $t3
      pos = (-0.4, 0)
      size [set every repeat] = (0.12,0.12)
      startVal [time (s)] = 0.0
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    ImageComponent lmark4
      image [set every repeat] = $t4
      pos = (-0.4, 0)
      size [set every repeat] = (0.12,0.12)
      startVal [time (s)] = 0.0
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    ImageComponent lmark5
      image [set every repeat] = $t5
      pos = (-0.4, 0)
      size [set every repeat] = (0.12,0.12)
      startVal [time (s)] = 0.0
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    ImageComponent lmark6
      image [set every repeat] = $t6
      pos = (-0.4, 0)
      size [set every repeat] = (0.12,0.12)
      startVal [time (s)] = 0.0
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    ImageComponent lmark7
      image [set every repeat] = $t7
      pos = (-0.4, 0)
      size [set every repeat] = (0.12,0.12)
      startVal [time (s)] = 0.0
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    ImageComponent lmark8
      image [set every repeat] = $t8
      pos = (-0.4, 0)
      size [set every repeat] = (0.12,0.12)
      startVal [time (s)] = 0.0
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  Routine tr2_1
    MouseComponent tmouse_2
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent drg2
      Code Type = Both
      Begin Experiment:
        ## code for py->js
        #shuffle = util.shuffle
        #win = psychoJS.window
        #thisExp = psychoJS.experiment
        count = 1
      Begin JS Experiment:
        count = 1;
      Begin JS Routine:
        psychoJS.experiment.addData("stage", "Preference");

        function shuffle_twolist(list1, list2) {
            // Create shuffled index based on length of list1
            const shuffled_indices = [...Array(list1.length).keys()].sort(() => Math.random() - 0.5);

            // Create shuffled lists using the generated indices
            const shuffled_list1 = shuffled_indices.map((i) => list1[i]);
            const shuffled_list2 = shuffled_indices.map((i) => list2[i]);

            return [shuffled_list1, shuffled_list2];
          }

        scenes = [cmark, cmark2, cmark3, cmark4, cmark5, cmark6];
        scene_value = ["1_flower", "2_bin", "3_sofa", "4_plant", "5_mail", "6_wash"];
        [new_scenes, new_scene_value] = shuffle_twolist(scenes, scene_value);
        console.log(new_scenes);
        console.log(new_scene_value);
        psychoJS.experiment.addData("scenes", new_scene_value);
        for (var pointer, _pj_c = 0, _pj_a = util.range(new_scenes.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            pointer = _pj_a[_pj_c];
            var x = ((- 0.8) + (Math.floor(pointer / 6) * 0.1));
            var y = ((0.15 * (pointer % 6)) - 0.37);
            new_scenes[pointer].setPos([x, y]);
            var wid = new_scenes[pointer].size[0];
            var hei = new_scenes[pointer].size[1];
            console.log("wid: ", wid);
            console.log(new_scene_value[pointer], "(", x, ",", y, ")");
        }
        drg_in_process = false;
        clicked_stim = null;
        psychoJS.experiment.nextEntry();
      Begin Routine:
        # define scene terms
        thisExp.addData("stage","Preference")


        def shuffle_twolist(list1, list2):
            b =  [i for i in range(len(list1))]
            np.random.shuffle(b)
            sorted_list1 = [t[1] for t in sorted(zip(b, list1), key=lambda x: x[0]) ]
            sorted_list2 = [t[1] for t in sorted(zip(b, list2), key=lambda x: x[0]) ]
            return sorted_list1, sorted_list2

        scenes = [cmark, cmark2, cmark3, cmark4, cmark5, cmark6]
        scene_value = ['1_flower', '2_bin', '3_sofa', '4_plant', '5_mail', '6_wash']

        new_scenes,new_scene_value = shuffle_twolist(scenes, scene_value)
        #new_scenes,new_scene_value = scenes, scene_value
        print(new_scenes)
        print(new_scene_value)

        #shuffle(scenes)
        thisExp.addData('scenes', new_scene_value)

        # set pos of different figures
        for pointer in range(len(new_scenes)):
            # 0 1 2 3 / 4 5 6 7
            # 0.45/0.15/-0.25/-0.45 0.15*(x % 4)-0.45
            x = -0.8+(pointer // 6)*0.1
            y = 0.15*(pointer % 6)-0.37
            new_scenes[pointer].setPos([x, y])
            wid, hei = new_scenes[pointer].size
            print("wid: ",wid)

            print(new_scene_value[pointer],'(',x,',',y,')' )




        drg_in_process = False
        clicked_stim = None

        thisExp.nextEntry()
      Each Frame:
        if not drg_in_process:
            for i in range(len(new_scenes)):
                if tmouse_2.isPressedIn(new_scenes[i]):
                    # drag start
                    drg_in_process = True
                    clicked_stim = new_scenes[i]
                    thisExp.addData('scene', new_scene_value[i])
                    # clear list
                    tmouse_2.x = []
                    tmouse_2.y = []
                    tmouse_2.time = []
                    break
        if tmouse_2.getPressed()[0] == 1:
            # set stimulus pos
            if drg_in_process:
                clicked_stim.pos = tmouse_2.getPos()
        else:
            # drag end
            if drg_in_process:
                # record stimulus pos and time
                thisExp.addData('item.x', tmouse_2.x)
                thisExp.addData('item.y', tmouse_2.y)
                thisExp.addData('item.time', tmouse_2.time)
                thisExp.nextEntry()
            drg_in_process = False
      Each JS Frame:
        if ((! drg_in_process)) {
            for (var i, _pj_c = 0, _pj_a = util.range(new_scenes.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                if (tmouse_2.isPressedIn(new_scenes[i])) {
                    drg_in_process = true;
                    clicked_stim = new_scenes[i];
                    psychoJS.experiment.addData("scene", new_scene_value[i]);
                    tmouse_2.x = [];
                    tmouse_2.y = [];
                    tmouse_2.time = [];
                    break;
                }
            }
        }
        if ((tmouse_2.getPressed()[0] === 1)) {
            if (drg_in_process) {
                clicked_stim.pos = tmouse_2.getPos();
            }
        } else {
            if (drg_in_process) {
                psychoJS.experiment.addData("item.x", tmouse_2.x);
                psychoJS.experiment.addData("item.y", tmouse_2.y);
                psychoJS.experiment.addData("item.time", tmouse_2.time);
                psychoJS.experiment.nextEntry();
            }
            drg_in_process = false;
        }
      End JS Routine:
        //screenshot = psychoJS.window.getMovieFrame();
        //screenshot.save((((("d2data/" + expInfo["participant"]) + "_count_") + count.toString()) + "_markmove.png"));
        count += 1;
        //psychoJS.window.clearBuffer();
        drg_in_process = false;
        clicked_stim = null;
        psychoJS.experiment.nextEntry();
      End Routine:
        ## record end time
        #thisExp.addData('end_time', mouse.mouseClock.getTime())
        #thisExp.nextEntry()

        screenshot = win.getMovieFrame()

        screenshot.save('d2data/'+expInfo['participant']+'_count_'+str(count)+'_markmove.png')
        count += 1
        win.clearBuffer()

        drg_in_process = False
        clicked_stim = None

        thisExp.nextEntry()
    PolygonComponent polygon_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.04, 0)
      shape = circle
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent image_7
      image = grid.png
      pos = (0.04, 0)
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent cmark
      image [set every repeat] = material2/1_flower.PNG
      pos = (0.04, 0)
      size [set every repeat] = (0.12,0.12)
      startVal [time (s)] = 0.0
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    ImageComponent cmark2
      image [set every repeat] = material2/2_bin.PNG
      pos = (0.04, 0)
      size [set every repeat] = (0.12,0.12)
      startVal [time (s)] = 0.0
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    ImageComponent cmark3
      image [set every repeat] = material2/3_sofa.PNG
      pos = (0.04, 0)
      size [set every repeat] = (0.12,0.12)
      startVal [time (s)] = 0.0
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    ImageComponent cmark4
      image [set every repeat] = material2/4_plant.PNG
      pos = (0.04, 0)
      size [set every repeat] = (0.12,0.12)
      startVal [time (s)] = 0.0
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    ImageComponent cmark5
      image [set every repeat] = material2/5_mail.PNG
      pos = (0.04, 0)
      size [set every repeat] = (0.12,0.12)
      startVal [time (s)] = 0.0
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    ImageComponent cmark6
      image [set every repeat] = material2/6_wash.PNG
      pos = (0.04, 0)
      size [set every repeat] = (0.12,0.12)
      startVal [time (s)] = 0.0
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    ButtonComponent btn_2
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.0353, 1.0000, 0.4588
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.77, -0.37)
      size = (0.18,0.06)
      startVal [time (s)] = 0
      text = Finish
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      callback:
        continueRoutine = False
    CodeComponent code_3
      Code Type = Both
      Begin Experiment:
        grid_size = 0.1
        grid_r = 4

        text_list = [
            '压力','高唤醒','激动',
            '不愉快','', '愉快',
            '压抑','低唤醒','放松']
        text_components = []
        text_pos_x = 0
        text_pos_y = 0
        for i in range(9):
            text_pos_x = (i % 3 - 1) * grid_r * (grid_size + 0.015)+0.04
            text_pos_y = np.floor(i / 3 - 1) * grid_r * (grid_size + 0.005)
            text_components.append(
                visual.TextStim(
                    win=win,
                    text=text_list[i],
                    pos=(text_pos_x, text_pos_y),
                    height=0.03))
      Begin JS Experiment:
        grid_size = 0.1;
        grid_r = 4;
        text_list = ["\u538b\u529b", "\u9ad8\u5524\u9192", "\u6fc0\u52a8", "\u4e0d\u6109\u5feb", "", "\u6109\u5feb", "\u538b\u6291", "\u4f4e\u5524\u9192", "\u653e\u677e"];
        text_components = [];
        text_pos_x = 0;
        text_pos_y = 0;
        for (var i, _pj_c = 0, _pj_a = util.range(9), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            text_pos_x = (((((i % 3) - 1) * grid_r) * (grid_size + 0.015)) + 0.04);
            text_pos_y = ((Math.floor(((i / 3) - 1)) * grid_r) * (grid_size + 0.005));
            text_components.push(new visual.TextStim({"win": psychoJS.window, "text": text_list[i], "pos": [text_pos_x, text_pos_y], "height": 0.03}));
        }
      Begin JS Routine:
        for (var i, _pj_c = 0, _pj_a = util.range(9), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            text_components[i].setAutoDraw(true);
        }
      Begin Routine:
        for i in range(9):
            text_components[i].setAutoDraw(True)
      End JS Routine:
        for (var i, _pj_c = 0, _pj_a = util.range(9), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            text_components[i].setAutoDraw(false);
        }
      End Routine:
        for i in range(9):
            text_components[i].setAutoDraw(False)
Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ratepic.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'image': 'materials/10_trash.png'},
      {'image': 'materials/11_coffeeshop.png'},
      {'image': 'materials/12_gym.png'},
      {'image': 'materials/13_hospital.png'},
      {'image': 'materials/14_barbershop.png'},
      {'image': 'materials/15_police.png'},
      {'image': 'materials/16_burger.png'},
      {'image': 'materials/17_bank.png'},
      {'image': 'materials/1_flower.PNG'},
      {'image': 'materials/2_bin.PNG'},
      {'image': 'materials/3_sofa.PNG'},
      {'image': 'materials/4_plant.PNG'},
      {'image': 'materials/5_mail.PNG'},
      {'image': 'materials/6_wash.PNG'},
      {'image': 'materials/7_chair.png'},
      {'image': 'materials/8_palmtree.png'},
      {'image': 'materials/9_roadtrack.png'},
      {'image': 'Avatar/Case_1.png'},
      {'image': 'Avatar/Case_2.png'},
      {'image': 'Avatar/Case_3.png'},
      {'image': 'Avatar/Case_4.png'},
      {'image': 'Avatar/Case_5.png'},
      {'image': 'Avatar/Case_6.png'},
      {'image': 'Avatar/Case_7.png'},
      {'image': 'Avatar/Case_8.png'},
      {'image': 'Avatar/Female_23.png'},
      {'image': 'Avatar/Female_29.png'},
      {'image': 'Avatar/Female_31.png'},
      {'image': 'Avatar/Female_39.png'},
      {'image': 'Avatar/Male_21.png'},
      {'image': 'Avatar/Male_25.png'},
      {'image': 'Avatar/Male_33.png'},
      {'image': 'Avatar/Male_35.png'}]
    Routine trial1
    Routine fixation
  LoopTerminator trials
  Routine intro2
  Routine tr2_1
  Routine intro2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Arrange.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'t1': 'Avatar/Case_1.png', 't2': 'Avatar/Case_2.png', 't3': 'Avatar/Case_3.png', 't4': 'Avatar/Case_4.png', 't5': 'Avatar/Case_5.png', 't6': 'Avatar/Case_6.png', 't7': 'Avatar/Case_7.png', 't8': 'Avatar/Case_8.png', 'new_size': 0.07, 'pictype': 'CaseType'},
      {'t1': 'Avatar/Female_23.png', 't2': 'Avatar/Female_29.png', 't3': 'Avatar/Female_31.png', 't4': 'Avatar/Female_39.png', 't5': 'Avatar/Male_21.png', 't6': 'Avatar/Male_25.png', 't7': 'Avatar/Male_33.png', 't8': 'Avatar/Male_35.png', 'new_size': 0.13, 'pictype': 'HumanType'}]
    Routine tr2
  LoopTerminator trials_2
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = Arrange.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'t1': 'Avatar/Case_1.png', 't2': 'Avatar/Case_2.png', 't3': 'Avatar/Case_3.png', 't4': 'Avatar/Case_4.png', 't5': 'Avatar/Case_5.png', 't6': 'Avatar/Case_6.png', 't7': 'Avatar/Case_7.png', 't8': 'Avatar/Case_8.png', 'new_size': 0.06, 'pictype': 'CaseType'},
      {'t1': 'Avatar/Female_23.png', 't2': 'Avatar/Female_29.png', 't3': 'Avatar/Female_31.png', 't4': 'Avatar/Female_39.png', 't5': 'Avatar/Male_21.png', 't6': 'Avatar/Male_25.png', 't7': 'Avatar/Male_33.png', 't8': 'Avatar/Male_35.png', 'new_size': 0.13, 'pictype': 'HumanType'}]
    Routine intro3
    Routine tr3
  LoopTerminator trials_4
  Routine thanks
